(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")

// **************** Main Components **************************

// The following components should usually be left as they are:
(Registration "MultiResolutionRegistration")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "RecursiveBSplineTransform")
(Metric "AdvancedMattesMutualInformation")
(Interpolator "BSplineInterpolator")
(Metric0Weight 1.00)
(Metric1Weight 0.80)

// ******************** Multiresolution **********************

(NumberOfResolutions 4)

// ***************** Transformation **************************

(FinalGridSpacingInPhysicalUnits 50)
// (FinalGridSpacingInVoxels 15.0 15.0)
// (GridSpacingSchedule 8.0 8.0 3.0 3.0 2.5 2.5 1.0 1.0)
// (GridSpacingSchedule 4.0 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

(NumberOfHistogramBins 32)

// If you use a mask, this option is important.
// If the mask serves as region of interest, set it to false.
// If the mask indicates which pixels are valid, then set it to true.
// If you do not use a mask, the option doesn't matter.
(ErodeMask "true")

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 750)

// The step size of the optimizer, in mm. By default the voxel size is used.
// which usually works well. In case of unusual high-resolution images
// (eg histology) it is necessary to increase this value a bit, to the size
// of the "smallest visible structure" in the image:
// (MaximumStepLength 100 80 70 60 50 10 10 1 1 1)

// **************** Image sampling **********************

(NumberOfSpatialSamples 25000)
(NewSamplesEveryIteration "true")
(ImageSampler "Random")

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 3)
//(WriteTransformParametersEachResolution "true")
//(WriteResultImageAfterEachResolution "true")

// Order of B-Spline interpolation used for applying the final
// deformation.
// 3 gives good accuracy; recommended in most cases.
// 1 gives worse accuracy (linear interpolation)
// 0 gives worst accuracy, but is appropriate for binary images
// (masks, segmentations); equivalent to nearest neighbor interpolation.
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

// Choose whether to generate the deformed moving image.
// You can save some time by setting this to false, if you are
// not interested in the final deformed moving image, but only
// want to analyze the deformation field for example.
(WriteResultImage "true")
(WriteTransformParametersEachResolution "false")

// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "float")
(ResultImageFormat "nrrd")